PsychoPy2experiment version="2022.2.4"
Settings
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1360, 768]
  expName = deneme
  keyboardBackend = ioHub
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Routines
  Routine blank2
    TextComponent blank_2
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        İkinci oturum tamamlanmıştır!

        Devam etmek istiyorsanız [Boşluk] tuşuna basınız.
    KeyboardComponent blank2_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine blank3
    TextComponent blank_3
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        Üçüncü oturum tamamlanmıştır!

        Devam etmek istiyorsanız [Boşluk] tuşuna basınız.
    KeyboardComponent blank3_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine End
    TextComponent end_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Deney tamamlanmıştır!

        Katılımınız için çok teşekkür ederiz :)

        Deneyle ilgili sorularınız için selincaliiskan@gmail.com mail adresine yazabilirsiniz.

        Deneyden çıkmak için [Boşluk] tuşuna basınız.
    KeyboardComponent end_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instruction
    TextComponent instruction_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        İkinci deney 4 oturumdan oluşmaktadır ve her oturum yaklaşık 15-20 dakika sürmektedir. Her oturum tamamlandığında size ekranda bilgi verilecektir. Bu sürelerde dinlenebilirsiniz.

        İlerlemek için [Boşluk] tuşuna basınız.
    KeyboardComponent instruction_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine welcome
    TextComponent welcome_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        İkinci Deneyimize Hoş Geldiniz!

        Deneye başlamadan önce sessiz bir ortamda olduğunuzdan ve kulaklıklarınızın yanınızda olduğundan emin olunuz.

        [Boşluk] tuşuna basarak ilerleyebilirsiniz.
    KeyboardComponent welcome_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine session2
    PolygonComponent i2a_rect
      anchor = top-right
      fillColor = white
      lineColor = -1.0000, -1.0000, -1.0000
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 7.0
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    ImageComponent i2_a
      anchor = top-right
      image [set every repeat] = $topright_imagea
      size = (0.5, 0.5)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 7.0
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    PolygonComponent i2b_rect
      anchor = top-left
      fillColor = white
      lineColor = -1.0000, -1.0000, -1.0000
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 7.0
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    ImageComponent i2_b
      anchor = top-left
      image [set every repeat] = $topleft_imagea
      size = (0.5, 0.5)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 7.0
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    PolygonComponent i2c_rect
      anchor = bottom-right
      fillColor = white
      lineColor = -1.0000, -1.0000, -1.0000
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 7.0
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    ImageComponent i2_c
      anchor = bottom-right
      image [set every repeat] = $bottomright_imagea
      size = (0.5, 0.5)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 7.0
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    PolygonComponent i2d_rect
      anchor = bottom-left
      fillColor = white
      lineColor = -1.0000, -1.0000, -1.0000
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 7.0
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    ImageComponent i2_d
      anchor = bottom-left
      image [set every repeat] = $bottomleft_imagea
      size = (0.5, 0.5)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 7.0
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    SoundComponent s2
      sound [set every repeat] = $target_sounda
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 7.0
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    MouseComponent mouse_2
      clickable = i2_a, i2_b, i2_c, i2_d
      forceEndRoutineOnPress = valid click
      saveMouseState = on valid click
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 7.0
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  Routine session3
    PolygonComponent i3a_rect
      anchor = top-right
      fillColor = white
      lineColor = -1.0000, -1.0000, -1.0000
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 7.0
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    ImageComponent i3_a
      anchor = top-right
      image [set every repeat] = $topright_imageb
      size = (0.5, 0.5)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 7.0
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    PolygonComponent i3b_rect
      anchor = top-left
      fillColor = white
      lineColor = -1.0000, -1.0000, -1.0000
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 7.0
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    ImageComponent i3_b
      anchor = top-left
      image [set every repeat] = $topleft_imageb
      size = (0.5, 0.5)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 7.0
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    PolygonComponent i3c_rect
      anchor = bottom-right
      fillColor = white
      lineColor = -1.0000, -1.0000, -1.0000
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 7.0
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    ImageComponent i3_c
      anchor = bottom-right
      image [set every repeat] = $bottomright_imageb
      size = (0.5, 0.5)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 7.0
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    PolygonComponent i3d_rect
      anchor = bottom-left
      fillColor = white
      lineColor = -1.0000, -1.0000, -1.0000
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 7.0
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    ImageComponent i3_d
      anchor = bottom-left
      image [set every repeat] = $bottomleft_imageb
      size = (0.5, 0.5)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 7.0
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    SoundComponent s3
      sound [set every repeat] = $target_soundb
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 7.0
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    MouseComponent mouse_3
      clickable = i3_a, i3_b, i3_c, i3_d
      forceEndRoutineOnPress = valid click
      saveMouseState = on valid click
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 7.0
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  Routine session4
    PolygonComponent i4a_rect
      anchor = top-right
      fillColor = white
      lineColor = -1.0000, -1.0000, -1.0000
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 7.0
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    ImageComponent i4_a
      anchor = top-right
      image [set every repeat] = $topright_imagec
      size = (0.5, 0.5)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 7.0
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    PolygonComponent i4b_rect
      anchor = top-left
      fillColor = white
      lineColor = -1.0000, -1.0000, -1.0000
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 7.0
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    ImageComponent i4_b
      anchor = top-left
      image [set every repeat] = $topleft_imagec
      size = (0.5, 0.5)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 7.0
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    PolygonComponent i4c_rect
      anchor = bottom-right
      fillColor = white
      lineColor = -1.0000, -1.0000, -1.0000
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 7.0
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    ImageComponent i4_c
      anchor = bottom-right
      image [set every repeat] = $bottomright_imagec
      size = (0.5, 0.5)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 7.0
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    PolygonComponent i4d_rect
      anchor = bottom-left
      fillColor = white
      lineColor = -1.0000, -1.0000, -1.0000
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 7.0
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    ImageComponent i4_d
      anchor = bottom-left
      image [set every repeat] = $bottomleft_imagec
      size = (0.5, 0.5)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 7.0
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    SoundComponent s4
      sound [set every repeat] = $target_soundc
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 7.0
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    MouseComponent mouse_4
      clickable = i4_a, i4_b, i4_c, i4_d
      forceEndRoutineOnPress = valid click
      saveMouseState = on valid click
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 7.0
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  Routine span_task
    TextComponent fixation
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    TextComponent pres_text
      letterHeight = 0.1
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $str(digits)[digitLoop.thisN]
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  Routine span_ins
    TextComponent digit_span_ins
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        Birinci Deneyimize Hoş Geldiniz!

        Bu deneyde sizden ekranda gördüğünüz rakamları aklınızda tutmanız ve daha sonra bu rakamları sırasıyla klavye ile yazmanız istenmektedir.

        Deney 3 rakam ile başlamakta ve siz doğru yanıt verdikçe birer rakam artmaktadır. Yazdığınız rakamı silmek isterseniz [Backspace] tuşunu kullanabilirsiniz. Üst üste iki kere yanlış yanıt verdiğinizde test sona erecektir.

        Rakamları yazdıktan sonra bir sonraki sayı dizisine geçmek için [Boşluk] tuşunu kullanınız.

        Deneye başlamak için [Boşluk] tuşuna basabilirsiniz.
    KeyboardComponent key_resp_ins
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine span_recall
    TextComponent recall_txt
      letterHeight = 0.05
      pos = (0, 0.25)
      startVal [time (s)] = 0
      text = Gördüğünüz Rakamları Yazın!
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    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.1
      size = (None, None)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp
      allowedKeys [set every repeat] = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent span_code
      Code Type = Auto->JS
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      Begin Experiment:
        # Store responses
        allResponses = []
      End Routine:
        if textbox.text == str(digits):
            correct = 1
            fbTxt = 'Correct!'
        else:
            correct = 0
            fbTxt = 'Incorrect'
        thisExp.addData('correct', correct)

        # Store each response in list
        allResponses.append(correct)
    CodeComponent span_JScode
      Code Type = JS
      Begin JS Routine:
        // this is a temporary fix to allow editable textbox to be used on several trials
        textbox.refresh()
  Routine feedback
    TextComponent feedback_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $fbTxt
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    CodeComponent feedback_code
      Code Type = Auto->JS
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      End Routine:
        # for incorrect, check that two responses exist
        # and that their sum of last two responses is zero
        if len(allResponses) >= 2 and sum(allResponses[-2:]) == 0:
            trials_span.finished = True
            blocks_span.finished = True
        # If sum of last two responses is 2, move to next sequence
        elif sum(allResponses[-2:]) == 2:
            trials_span.finished = True
            allResponses = []
  Routine span_end
    TextComponent thank_you
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Birinci deney tamamlanmıştır!

        Teşekkür ederiz!

        İkinci deneye başlamak için Boşluk [Space] tuşuna basınız.
    KeyboardComponent span_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine introduction
    TextComponent intro_text
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        Deneyimize Hoş Geldiniz!

        Bu deney iki aşamadan oluşmaktadır. Her deney ile ilgili bilgi deney öncesinde ekranda sunulacaktır.

        İki deneyin de doğru bir biçimde tamamlanabilmesi için deneyler boyunca BİLGİSAYARINIZI KAPATMAYIN ve DENEY SAYFASINDAN ÇIKMAYINIZ.

        Hazırsanız, Boşluk [Space] tuşuna basınız.
    KeyboardComponent key_resp_intro
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine training_ready
    TextComponent text_training_ready
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Bu deneyde kulaklıkla cümleler duyacak ve aynı zamanda ekranda resimler göreceksiniz. Sizden istenen duyduğunuz cümle ile en alakalı olduğunu düşündüğünüz resme en kısa sürede mouse ile tıklamanız.

        Deneyden önce kısa bir alıştırma yapılacaktır.

        Alıştırmaya başlamak için [Boşluk] tuşuna basınız.
    KeyboardComponent key_training_ready
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine training_ses
    PolygonComponent image_rect_1
      anchor = top-right
      fillColor = white
      lineColor = -1.0000, -1.0000, -1.0000
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 7.0
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    ImageComponent image1_t
      anchor = top-right
      image [set every repeat] = $topright_image
      size = (0.5, 0.5)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 7.0
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    PolygonComponent image_rect_2
      anchor = top-left
      fillColor = white
      lineColor = -1.0000, -1.0000, -1.0000
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 7.0
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    ImageComponent image2_t
      anchor = top-left
      image [set every repeat] = $topleft_image
      size = (0.5, 0.5)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 7.0
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    PolygonComponent image_rect_3
      anchor = bottom-right
      fillColor = white
      lineColor = -1.0000, -1.0000, -1.0000
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 7.0
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    ImageComponent image3_t
      anchor = bottom-right
      image [set every repeat] = $bottomright_image
      size = (0.5, 0.5)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 7.0
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    PolygonComponent image_rect_4
      anchor = bottom-left
      fillColor = white
      lineColor = -1.0000, -1.0000, -1.0000
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 7.0
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    ImageComponent image4_t
      anchor = bottom-left
      image [set every repeat] = $bottomleft_image
      size = (0.5, 0.5)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 7.0
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    SoundComponent sound_t
      sound [set every repeat] = $audiofile
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 7.0
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    MouseComponent mouse_t
      clickable = image1_t, image2_t, image3_t, image4_t
      forceEndRoutineOnPress = valid click
      saveMouseState = on valid click
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 7.0
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  Routine tr_congrats
    TextComponent text_tr_congrats
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Alıştırma tamamlanmıştır. Teşekkür ederiz!

        Deneye başlamadan önce hatırlatma ekranına geçmek için [Boşluk] tuşuna basınız.
    KeyboardComponent key_resp_session
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine exp_rules
    TextComponent text_rules
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      wrapWidth = 1
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      text:
        Deney 4 oturumdan oluşmaktadır ve her oturum yaklaşık 15-20 dakika sürmektedir. Her oturum tamamlandığında size ekranda bilgi verilecektir. Bu sürelerde dinlenebilirsiniz.

        Bu deneyde kulaklıkla cümleler duyacak ve aynı zamanda ekranda resimler göreceksiniz. Sizden istenen duyduğunuz cümle ile en alakalı olduğunu düşündüğünüz resme en kısa sürede mouse ile tıklamanız.

        Deneyin  doğru bir biçimde tamamlanabilmesi için deneyler boyunca BİLGİSAYARINIZI KAPATMAYIN ve DENEY SAYFASINDAN ÇIKMAYINIZ.

        Hazırsanız, Boşluk [Space] tuşuna basınız.
    KeyboardComponent key_resp_rules
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine you_ready
    TextComponent text_youready
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      wrapWidth = 2
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      text:
        Hazır hissettiğinizde [Boşluk] tuşuna basarak deneye başlayabilirsiniz.
    KeyboardComponent key_resp_ready
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine exp_congrats
    TextComponent text_congrats
      letterHeight = 0.03
      opacity = 0
      startVal [time (s)] = 0.0
      wrapWidth = 2
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      text:
        Bu oturumu tamamladınız!

        Bir sonraki oturuma başlamadan önce dinlenebilir veya yeni oturuma hemen başlayabilirsiniz.

        Devam etmek için [Boşluk] tuşuna basınız.
    KeyboardComponent key_resp_congrats
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine experiment
    PolygonComponent image_rect
      anchor = top-right
      fillColor = white
      lineColor = -1.0000, -1.0000, -1.0000
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 7.0
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    ImageComponent image1
      anchor = top-right
      image [set every repeat] = $topright_image
      size = (0.5, 0.5)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 7.0
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    PolygonComponent image2_rect
      anchor = top-left
      fillColor = white
      lineColor = -1.0000, -1.0000, -1.0000
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 7.0
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    ImageComponent image2
      anchor = top-left
      image [set every repeat] = $topleft_image
      size = (0.5, 0.5)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 7.0
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    PolygonComponent image3_rect
      anchor = bottom-right
      fillColor = white
      lineColor = -1.0000, -1.0000, -1.0000
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 7.0
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    ImageComponent image3
      anchor = bottom-right
      image [set every repeat] = $bottomright_image
      size = (0.5, 0.5)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 7.0
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    PolygonComponent image4_rect
      anchor = bottom-left
      fillColor = white
      lineColor = -1.0000, -1.0000, -1.0000
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 7.0
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    ImageComponent image4
      anchor = bottom-left
      image [set every repeat] = $bottomleft_image
      size = (0.5, 0.5)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 7.0
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    SoundComponent sound1
      sound [set every repeat] = $audiofile
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 7.0
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    MouseComponent mouse
      clickable = image1, image2, image3, image4
      forceEndRoutineOnPress = valid click
      saveMouseState = on valid click
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 7.0
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Flow
  Routine introduction
  Routine span_ins
  LoopInitiator blocks_span loopType="TrialHandler"
    conditionsFile = choose_digitSpan.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [{'condition_file': 'three.xlsx'},
      {'condition_file': 'four.xlsx'},
      {'condition_file': 'five.xlsx'},
      {'condition_file': 'six.xlsx'},
      {'condition_file': 'seven.xlsx'},
      {'condition_file': 'eight.xlsx'},
      {'condition_file': 'nine.xlsx'},
      {'condition_file': 'ten.xlsx'},
      {'condition_file': 'eleven.xlsx'},
      {'condition_file': 'twelve.xlsx'}]
    LoopInitiator trials_span loopType="TrialHandler"
      conditionsFile = $condition_file
      loopType = sequential
      nReps = 1
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      LoopInitiator digitLoop loopType="TrialHandler"
        loopType = sequential
        nReps = digitSpan
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        Routine span_task
      LoopTerminator digitLoop
      Routine span_recall
      Routine feedback
    LoopTerminator trials_span
  LoopTerminator blocks_span
  Routine span_end
  Routine welcome
  Routine instruction
  Routine training_ready
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = training.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('topright_image', 'images/target_41.png'), ('topleft_image', 'images/discomp_41.png'), ('bottomright_image', 'images/competitor_41.png'), ('bottomleft_image', 'images/distarget_41.png'), ('audiofile', 'sounds/linear_long_41.wav')]),
      OrderedDict([('topright_image', 'images/competitor_43.png'), ('topleft_image', 'images/target_43.png'), ('bottomright_image', 'images/distarget_43.png'), ('bottomleft_image', 'images/discomp_43.png'), ('audiofile', 'sounds/nested_short_43.wav')]),
      OrderedDict([('topright_image', 'images/distarget_42.png'), ('topleft_image', 'images/competitor_42.png'), ('bottomright_image', 'images/discomp_42.png'), ('bottomleft_image', 'images/target_42.png'), ('audiofile', 'sounds/nested_long_42.wav')]),
      OrderedDict([('topright_image', 'images/discomp_45.png'), ('topleft_image', 'images/distarget_45.png'), ('bottomright_image', 'images/target_45.png'), ('bottomleft_image', 'images/competitor_45.png'), ('audiofile', 'sounds/linear_short_45.wav')])]
    Routine training_ses
  LoopTerminator trials
  Routine tr_congrats
  Routine exp_rules
  Routine you_ready
  LoopInitiator blocks loopType="TrialHandler"
    conditionsFile = blocks.csv
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('CondsFile', 'session_1.csv')]),
      OrderedDict([('CondsFile', 'session_2.csv')]),
      OrderedDict([('CondsFile', 'session_3.csv')]),
      OrderedDict([('CondsFile', 'session_4.csv')])]
    LoopInitiator trials_exp loopType="TrialHandler"
      conditionsFile = $CondsFile
      loopType = random
      nReps = 1
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      Routine experiment
    LoopTerminator trials_exp
    Routine exp_congrats
  LoopTerminator blocks
  Routine End
